PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Finger_tapping_5mins_15s_on_15s_off
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Routines
  Routine Finger_tap
    TextComponent text_2
      letterHeight = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Tap the fingers of your right hand
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  Routine Trigger
    TextComponent text
      letterHeight = 0.03
      pos = [0, -0.95]
      startVal [time (s)] = 0.0
      text = The program is now ready and will be triggered automatically by the scanner. Press 't' to proceed manually (e.g. for demo purposes).
      units = norm
      wrapWidth = 2
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    KeyboardComponent key_resp_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Blank
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_interval
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        stimulus_interval = randint(low = 1, high = 5)
        thisExp.addData('stimulus_interval', stimulus_interval)
      End Routine:
        stimulus_interval = randint(low = 1, high = 5)
        thisExp.addData('stimulus_interval', stimulus_interval)
  Routine Tap
    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (5,5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine aftertap
Flow
  Routine Trigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Finger_tap
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine Tap
      Routine Blank
    LoopTerminator trials_2
    Routine Blank
  LoopTerminator trials
