PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exp
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Routines
  Routine trial
    TextComponent memoryPrompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $timera
      text = Please recall (PROMPT)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random
        timera = random.randint(4,5)
  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timera
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine blank
  LoopTerminator trials
