PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Checkerboard_5mins_15s_on_15s_off
  Units = deg
  Screen = 1
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Routines
  Routine Trigger
    TextComponent text
      wrapWidth = 2
      text = The program is now ready and will be triggered automatically by the scanner. Press 't' to proceed manually (e.g. for demo purposes).
      pos = [0, -0.95]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine CheckerBoard
    CodeComponent code
      Begin Experiment:
        grating = visual.GratingStim(win=win, name='grating_2',
            tex='sqr', mask=None,
            ori=0, pos=[0, 0], size=[0.03, 0.03], sf=None, phase=0.0,
            color=[1,-1,-1], colorSpace='rgb', opacity=1,
            texRes=128, interpolate=True, depth=0.0)
      Begin Routine:
        globalClock = core.Clock()
        wedge1 = visual.RadialStim(win, tex='sqrXsqr', color=1,size=30,
            visibleWedge=[0, 360], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)#this stim changes too much for autologging to be useful
        wedge2 = visual.RadialStim(win, tex='sqrXsqr', color=-1,size=30,
            visibleWedge=[0, 360], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)#this stim changes too much for autologging to be useful
        t=0
        rotationRate = 0.125 #revs per sec
        flashPeriod = 0.25 #seconds for one B-W cycle (ie 1/Hz)
        while t<15: #Total display time
            t=globalClock.getTime()
            if (t%flashPeriod) < (flashPeriod/2.0):# (NB more accurate to use number of frames)
                stim = wedge1
                stim2 = grating
            else:
                stim=wedge2
                stim2 = grating

            stim.setOri(t*rotationRate*360.0)
            stim.draw()
            stim2.draw()
            if event.getKeys(["escape"]):
                core.quit()
            win.flip()
  Routine Blank
    GratingComponent grating
      tex = sqr
      color = $[1,-1,-1]
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      sf = None
      size = [0.3, 0.3]
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Flow
  Routine Trigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine CheckerBoard
    Routine Blank
  LoopTerminator trials
