PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp
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Routines
  Routine trial
    TextComponent memoryPrompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please recall (PROMPT)
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -.4)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Type response here
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timera
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        timera = random.randint(4,5)
  Routine question
  Routine Intructions
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Insert text here
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine readycheck
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Are you ready to remember (BLANK)?

        Press enter when ready.
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You may now stop.
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Flow
  Routine Intructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine blank
    Routine readycheck
    Routine blank
    Routine end
  LoopTerminator trials
